CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
MeasureTexture:[module_num:6|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
    Hidden:1
    Hidden:1
    Hidden:7
    Select an image to measure:OrigRed
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    Texture scale to measure:3
    Texture scale to measure:4
    Texture scale to measure:2
    Texture scale to measure:10
    Texture scale to measure:20
    Texture scale to measure:1
    Texture scale to measure:30
    Measure images or objects?:Images

MeasureImageIntensity:[module_num:7|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
    Select the image to measure:OrigRed
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureGranularity:[module_num:8|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
    Image count:1
    Object count:0
    Select an image to measure:OrigRed
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Texture_
    Overwrite existing files without warning?:No
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